PsychoPy2experiment version="2024.2.2"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Enable Escape = False
  Experiment info = {'ID': '', 'participant': '', 'Age': '\n', 'Gender': '["Male","Female"]', 'Dominant Eye': '["Right","Left"]', 'Dominant Hand': '["Right","Left"]', 'session': 'PUN', 'EDF Filename': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  consoleLoggingLevel = error
  expName = PunjabiActivePassive
  keyboardBackend = PsychToolbox
  logging level = error
  runMode = 1
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Routines
  Routine thanks
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    TextboxComponent textbox
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      font = Times New Roman
      letterHeight = 0.05
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for your participation.
      units = height
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  Routine eyelinkSetup
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    TextComponent elInstructions
      letterHeight = 50
      startVal [time (s)] = 0
      text = Press any key to start Camera Setup
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = (1, 1, 1)
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (0,0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget2.png
      targetSize = 24
      targetType = picture
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  Routine init
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    CodeComponent experiment_init
      Code Type = Auto->JS
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      Begin Experiment:
        delayDurMin = 0.1
        delayDurMax = 0.5

        # Fixation cross duration
        fixDurMin = 0.5 # minimum: 500 ms
        fixDurMax = 1 # maximum: 1000 ms

        # Time between trials
        iti = 0.5 # One second

        # Break after these many trials
        tr1_break = 36
        s1_break = 27

        #drift check after every n trials
        drift_interval = 10
        do_drift = False

        #Show image for 5 min
        image_time = 5
        movie_time = 4
        sentence_time = audio_time = 4
    CodeComponent button_init
      Code Type = Auto->JS
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      Begin Experiment:
        keypress_text = "Please press any key to proceed."

        tr1_text_base = (
            "Please look at the fixation cross till the image appears.\n"
            f"Look at the image as long as it is on the screen.\n"
        )
        tr1_text = "Session 1\n\n" + tr1_text_base + "\n" + keypress_text
        tr2_text_base = (
            "Please look at the fixation cross on the screen.\n"
            "Listen to the sentence.\n"
            "After that the fixation cross hair will reappear.\n"
            "Look at the fixation cross till the image appears.\n"
            "Look at the image as long as it is on the screen.\n\n"
        )

        s1_text = "Session 2\n\n" + tr2_text_base + keypress_text

        tr2_text = tr2_text_base + keypress_text
        s3_text = "Experiment Session\n\n" + tr2_text_base + keypress_text


        trial_break_message = ""
    CodeComponent code_8
      Code Type = Auto->JS
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      Before Experiment:
        from datetime import datetime
      Begin Experiment:
        p_id = expInfo["ID"]
        p_id = int(p_id)


        list1 = slice(0, 2)
        list2 = slice(2, 4)
        list3 = slice(4, 6)
        list4 = slice(6, 8)
        list5 = slice(8, 10)
        list6 = slice(10, 12)


        # Compute the list index based on p_id
        list_index = p_id % 6

        # Select the appropriate slice based on list_index
        if list_index == 0:
            list_selector = list1
        elif list_index == 1:
            list_selector = list2
        elif list_index == 2:
            list_selector = list3
        elif list_index == 3:
            list_selector = list4
        elif list_index == 4:
            list_selector = list5
        elif list_index == 5:
            list_selector = list6

        filename = "experiment_log_pujabi.txt"
        current_time = current_time = datetime.now().strftime("%Y-%m-%d %H:%M:%S")
        # Read existing content (if any)
        if os.path.exists(filename):
            with open(filename, "r") as file:
                lines = file.readlines()
        else:
            lines = []

        # Append new entry
        new_entry = f"{p_id}, {current_time}, {list_index}\n"
        lines.append(new_entry)

        # Write updated content back to the file
        with open(filename, "w") as file:
            file.writelines(lines)

        print(f"✅ Experiment {p_id} saved at {current_time}")
  Routine TR1_instruct
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    TextboxComponent tr1_textbox_instruct
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      font = Times New Roman
      letterHeight = 0.05
      size = (2, 2)
      startVal [time (s)] = 0.0
      text = $tr1_text
      units = height
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    KeyboardComponent tr1_key_resp_instruct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TR1_image_display
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Fixation cross duration for this trial
        fixDur = np.random.uniform(fixDurMin, fixDurMax) # random between minimum and maximum
        thisExp.addData('fixation_duration',fixDur) # docu
      Each Frame:
        if t >= fixDur+image_time:
            continueRoutine = False
    TextComponent tr1_crosshair
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
      units = height
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    ImageComponent tr1_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $image
      size = (1920, 1080)
      startVal [time (s)] = $fixDur
      stopVal [duration (s)] = image_time
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixDur+image_time
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    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkInterestAreaMessages = tr1_crosshair
      componentsForEyeLinkStimEventMessages = tr1_crosshair,tr1_image
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = image_id,image,stim_id,voice_id,session,filename,voice
      useQuitKeys = True
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  Routine TR1_feedback
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    CodeComponent tr1_code_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if str(near_far) == '0':
            correct_keys = correct_near_button
        else:
            correct_keys = correct_far_button

        #msg_ = f"{correct}, {correct_keys},{tr1_key_resp_image_display.keys}"

        if tr1_key_resp.keys in correct_keys:
           msg =  "Correct"
           tr1_feedback.color ="green"
        else:
           msg =  "Wrong"
           tr1_feedback.color ="red"
    TextboxComponent tr1_feedback
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      font = Times New Roman
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $msg
      units = height
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  Routine S1_eyelink_start
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    HostDrawing HostDrawing_2 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = s1_crosshair
      imagesToHostBackdrop = image,s1_image;sentence,s1_sentence
      recordStatusMessage = "Trial %s" % trial_index
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck_2 plugin="psychopy-eyelink"
      backgroundColor = (1,1,1)
      disabled = True
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (0,0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget2.png
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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    StartRecording StartRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine TR1_eyelink_start
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = tr1_crosshair
      imagesToHostBackdrop = image,tr1_image
      recordStatusMessage = "Trial %s" % trial_index
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = (1,1,1)
      disabled = True
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (0,0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget2.png
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine TR1_eyelink_stop
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine S1_image_display
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Fixation cross duration for this trial
        fixDur = np.random.uniform(fixDurMin, fixDurMax) # random between minimum and maximum
        thisExp.addData('fixation_duration',fixDur)
      Each Frame:
        if t >= 2*fixDur+image_time+movie_time:
            continueRoutine = False
    TextComponent s1_crosshair_s
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
      units = height
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    ImageComponent s1_sentence
      image [set every repeat] = $sentence
      size = (1920, 1080)
      startVal [time (s)] = $fixDur
      stopVal [duration (s)] = $sentence_time
      units = pix
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    SoundComponent sound_1
      sound [set every repeat] = $audio
      startVal [time (s)] = $fixDur
      stopVal [duration (s)] = $audio_time
      syncScreenRefresh = False
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    TextComponent s1_crosshair
      color = black
      letterHeight = 0.05
      startVal [time (s)] = $fixDur+sentence_time
      stopVal [duration (s)] = $fixDur
      text = +
      units = height
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    ImageComponent s1_image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $image
      size = (1920, 1080)
      startVal [time (s)] = $fixDur+sentence_time+fixDur
      stopVal [duration (s)] = $image_time
      units = pix
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    MarkEvents MarkEvents_2 plugin="psychopy-eyelink"
      componentsForEyeLinkInterestAreaMessages = s1_crosshair
      componentsForEyeLinkStimEventMessages = s1_crosshair,s1_sentence,s1_crosshair_s, s1_image
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = voice_id,image_id,image,stim_id,sentence,audio,session,filename,voice
      useQuitKeys = True
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  Routine S1_eye_link_stop
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    StopRecording StopRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine Break
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    TextComponent break_text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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      text:
        You have completed Session 1
    KeyboardComponent key_resp_break
      allowedKeys = "space"
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine S3_instruct
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    TextboxComponent s3_textbox_instruct
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      font = Times New Roman
      letterHeight = 0.05
      size = (2, 2)
      startVal [time (s)] = 0.0
      text = $s3_text
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    KeyboardComponent s3_key_resp_instruct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine S1_instruct
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    TextboxComponent s1_textbox_instruct
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      font = Times New Roman
      letterHeight = 0.05
      size = (2, 2)
      startVal [time (s)] = 0.0
      text = $s1_text
      units = height
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    KeyboardComponent s1_key_resp_instruct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inter_trial_interval
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        msg_completed = f'{free_view_loop.thisN + 1}/{free_view_loop.nTotal} Completed'
    TextComponent blank_iti
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = height
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      text [set every repeat]:
        $msg_completed
  Routine TrialBreak
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    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Routine:
        if ((far_near_train_loop.thisN+1) % drift_interval != 0):
          do_drift = False
        else:
          do_drift = True

        trial_break_message = 'Time for a break. \n You have completed %s of %s trials! \n You can press any button when ready.'%(far_near_train_loop.thisN, len(far_near_train_loop.trialList)*far_near_train_loop.nReps)
        if ((far_near_train_loop.thisN) % tr1_break != 0) or (far_near_train_loop.thisN ==0):
            continueRoutine = False
    TextboxComponent textbox_break
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      font = Times New Roman
      letterHeight = 0.05
      size = (2, 2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_break_message
      units = height
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    TextComponent timer_clock_trial
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $round(30.0 - t, ndigits = 1)
      units = height
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    KeyboardComponent key_resp_trial_break
      allowedKeys = 'space','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine S1_Break
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    CodeComponent break_code_2
      Code Type = Auto->JS
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      Begin Routine:
        if ((far_near_train_loop.thisN+1) % drift_interval != 0):
          do_drift = False
        else:
          do_drift = True

        trial_break_message = 'Time for a break. \n You have completed %s of %s trials! \n You can press any button when ready.'%(far_near_test_loop.thisN, len(far_near_test_loop.trialList)*far_near_test_loop.nReps)
        if ((far_near_test_loop.thisN) % s1_break != 0) or (far_near_test_loop.thisN ==0):
            continueRoutine = False
    TextboxComponent textbox_break_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      font = Times New Roman
      letterHeight = 0.05
      size = (2, 2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_break_message
      units = height
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    TextComponent timer_clock_trial_2
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $round(30.0 - t, ndigits = 1)
      units = height
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    KeyboardComponent key_resp_trial_break_2
      allowedKeys = 'space','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial_calib
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    CameraSetup CameraSetup_3 plugin="psychopy-eyelink"
      backgroundColor = (1, 1, 1)
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (0,0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget2.png
      targetSize = 24
      targetType = picture
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  Routine Check_far
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    TextComponent text_far
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press key for FAR to continue.
      units = height
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    KeyboardComponent key_resp_far
      allowedKeys = correct_far_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Check_near
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    TextComponent text_near
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press key for NEAR to continue.
      units = height
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    KeyboardComponent key_resp_near
      allowedKeys = correct_near_button
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Good_to_go
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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      text:
        Experiment Starts.
        Keep eyes on screen at all times.
  Routine StartRecord_3
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    StartRecording StartRecord_4 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine DriftCheck_3
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if (far_near_train_loop.thisTrialN + 1) % drift_interval == 0:
            drift_check_on = True
        else:
            drift_check_on = False

        if drift_check_on == False :
            print("Drift Check Disabled")
            continueRoutine = False
    DriftCheck DriftCheck_4 plugin="psychopy-eyelink"
      backgroundColor = (1,1,1)
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (0,0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.png
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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  Routine TR1_el_start_no_drift
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    CodeComponent break_code_3
      Code Type = Auto->JS
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      Begin Routine:
        if ((far_near_train_loop.thisN) % drift_interval != 0) or (far_near_train_loop.thisN ==0):
            continueRoutine = False
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = A
      units = height
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    HostDrawing HostDrawing_3 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = tr1_crosshair
      imagesToHostBackdrop = file,tr1_image
      recordStatusMessage = "Trial %s" % trial_index
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck_5 plugin="psychopy-eyelink"
      backgroundColor = (1,1,1)
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (0,0,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget2.png
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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    StartRecording StartRecord_5 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine S1_inter_trial_interval
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        msg_completed = f'Trial {(experiment_loop.thisN + 1)+8*(active_passive.thisN)}/{active_passive.nTotal*experiment_loop.nTotal} Completed'
    TextComponent blank_iti_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = height
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      text [set every repeat]:
        $msg_completed
Flow
  Routine init
  Routine eyelinkSetup
  Routine TR1_instruct
  Routine Good_to_go
  LoopInitiator free_view_loop loopType="TrialHandler"
    conditionsFile = exp_files/experiment_data.csv
    endPoints = [1, 2]
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('No', 1), ('image_id', 'IMG_01'), ('stim_id', 'STIM_01'), ('text', 'The girl lit the lamp.'), ('voice', 'active'), ('voice_id', 'IMG_01_A'), ('stimulus_folder', 'exp_images'), ('folder_images', 'images'), ('folder_audio', 'audio'), ('folder_sentences', 'sentences'), ('image_filename', 'girl_lighted_lamp.png'), ('image', 'exp_images/images/girl_lighted_lamp.jpg'), ('sentence_filename', 'Lamp.jpg'), ('sentence', 'exp_images/sentences/Lamp.jpg'), ('audio_filename', 'lamp.wav'), ('audio', 'exp_images/audio/lamp.wav'), ('session', 'free_viewing'), ('filename', 'experiment_data')]),
      OrderedDict([('No', 2), ('image_id', 'IMG_02'), ('stim_id', 'STIM_02'), ('text', 'The girl opened the window.'), ('voice', 'active'), ('voice_id', 'IMG_02_A'), ('stimulus_folder', 'exp_images'), ('folder_images', 'images'), ('folder_audio', 'audio'), ('folder_sentences', 'sentences'), ('image_filename', 'girl_opened_window.png'), ('image', 'exp_images/images/girl_opened_window.jpg'), ('sentence_filename', 'Window.jpg'), ('sentence', 'exp_images/sentences/Window.jpg'), ('audio_filename', 'window.wav'), ('audio', 'exp_images/audio/window.wav'), ('session', 'free_viewing'), ('filename', 'experime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,
      OrderedDict([('No', 3), ('image_id', 'IMG_03'), ('stim_id', 'STIM_03'), ('text', 'The girl planted the sapling.'), ('voice', 'active'), ('voice_id', 'IMG_03_A'), ('stimulus_folder', 'exp_images'), ('folder_images', 'images'), ('folder_audio', 'audio'), ('folder_sentences', 'sentences'), ('image_filename', 'girl_plant_tree.png'), ('image', 'exp_images/images/girl_plant_tree.jpg'), ('sentence_filename', 'Tree.jpg'), ('sentence', 'exp_images/sentences/Tree.jpg'), ('audio_filename', 'tree.wav'), ('audio', 'exp_images/audio/tree.wav'), ('session', 'free_viewing'), ('filename', 'experiment_data')]),
      OrderedDict([('No', 4), ('image_id', 'IMG_04'), ('stim_id', 'STIM_04'), ('text', 'The man cut the shrub.'), ('voice', 'active'), ('voice_id', 'IMG_04_A'), ('stimulus_folder', 'exp_images'), ('folder_images', 'images'), ('folder_audio', 'audio'), ('folder_sentences', 'sentences'), ('image_filename', 'man_cut_shrub.png'), ('image', 'exp_images/images/man_cut_shrub.jpg'), ('sentence_filename', 'Grass.jpg'), ('sentence', 'exp_images/sentences/Grass.jpg'), ('audio_filename', 'grass.wav'), ('audio', 'exp_images/audio/grass.wav'), ('session', 'free_viewing'), ('filename', 'experiment_data')])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
    Routine TR1_eyelink_start
    Routine TR1_image_display
    Routine TR1_eyelink_stop
    Routine inter_trial_interval
  LoopTerminator free_view_loop
  Routine Break
  Routine S1_instruct
  LoopInitiator active_passive loopType="TrialHandler"
    Selected rows = $list_selector
    conditionsFile = exp_files/list_selector.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('No', 1), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Active_List_1.csv'), ('file_csv_selected', 'exp_files/lists/Active_List_1.csv')]),
      OrderedDict([('No', 2), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Passive_List_1.csv'), ('file_csv_selected', 'exp_files/lists/Passive_List_1.csv')]),
      OrderedDict([('No', 3), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Active_List_2.csv'), ('file_csv_selected', 'exp_files/lists/Active_List_2.csv')]),
      OrderedDict([('No', 4), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Passive_List_2.csv'), ('file_csv_selected', 'exp_files/lists/Passive_List_2.csv')]),
      OrderedDict([('No', 5), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Active_List_3.csv'), ('file_csv_selected', 'exp_files/lists/Active_List_3.csv')]),
      OrderedDict([('No', 6), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Passive_List_3.csv'), ('file_csv_selected', 'exp_files/lists/Passive_List_3.csv')]),
      OrderedDict([('No', 7), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Active_List_4.csv'), ('file_csv_selected', 'exp_files/lists/Active_List_4.csv')]),
      OrderedDict([('No', 8), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Passive_List_4.csv'), ('file_csv_selected', 'exp_files/lists/Passive_List_4.csv')]),
      OrderedDict([('No', 9), ('basefolder', 'exp_files/lists/'), ('csvfilename', 'Active_List_5.csv'), ('file_csv_selected', 'exp_files/lists/Active_List_5.csv')])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
    LoopInitiator experiment_loop loopType="TrialHandler"
      conditions = [OrderedDict([('ID', 'ST01'), ('text', 'The boy played the tabla.'), ('voice', 'active'), ('image', 'exp_files/IMG_01.png'), ('video', 'exp_files/VID01.mp4'), ('sentence', 'exp_files\\SENT_01.png'), ('audio', 'exp_files\\AUD_01.wav')])]
      conditionsFile = $file_csv_selected
      loopType = fullRandom
      nReps = 1
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      Routine S1_eyelink_start
      Routine S1_image_display
      Routine S1_eye_link_stop
      Routine S1_inter_trial_interval
    LoopTerminator experiment_loop
  LoopTerminator active_passive
  Routine thanks
